PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sweet_t
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine video
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    MovieComponent film
      backend = ffpyplayer
      forceEndRoutine = True
      movie = /Users/kota/Desktop/sweet_t_search/sweet/sweet_tooth.mp4
      size = (1.7, 0.95)
      startVal [time (s)] = 0.0
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    CodeComponent emergency_exit
      Code Type = Auto->JS
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      Each Frame:
        if defaultKeyboard.getKeys(keyList=["escape"], waitRelease=False):
            core.quit()
  Routine before
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    TextComponent before_title
      letterHeight = 0.025
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
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      text:
        Please answer two short questions before watching the film.
        Пожалуйста, ответьте на два коротких вопроса перед просмотром.
    TextComponent question_relaxation
      letterHeight = 0.025
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
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      text:
        How tense or relaxed do you feel right now?
        Насколько напряжённо или расслабленно вы чувствуете себя сейчас?
    SliderComponent baseline_relaxation
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Very tense / Очень напряжённо", "Completely relaxed / Полностью расслабленно"]
      letterHeight = 0.02
      pos = (0, 0.13)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_curiosity
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        During the past week, how often did you stop to take a closer look at something that caught your attention?
        Как часто за последнюю неделю вы останавливались, чтобы внимательнее присмотреться к тому, что привлекло ваше внимание?
    SliderComponent baseline_curiosity
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Never  /  Ни разу", "Every day /  Каждый день"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent start_viewing_button
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Start viewing 
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    CodeComponent validate_before
      Code Type = Auto->JS
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      Each Frame:
        if (
            baseline_relaxation.getRating() is not None
            and baseline_curiosity.getRating() is not None
            and start_viewing_button.isClicked
        ):
            continueRoutine = False
  Routine assignment
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    CodeComponent condition_assignment
      Code Type = Both
      Begin Experiment:
        import random

        condition = random.choice([1, 2, 3, 4])
        thisExp.addData("condition", condition)
      Begin JS Experiment:
        condition = Math.floor(Math.random() * 4) + 1;
        psychoJS.experiment.addData("condition", condition);
  Routine welcome_2
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    CodeComponent gate_welcome_2
      Code Type = Both
      Begin JS Routine:
        if (condition !== 2) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 2:
            continueRoutine = False
    TextComponent welcome_5
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time and interest.
        This study explores how people experience a work of art.
        You will watch a 30-minute film. The film cannot be paused or rewound, so please make sure you have enough uninterrupted time.
        Before the film, you will answer two short questions. After the film, you will answer several more.
        There are no right or wrong answers. Please respond based on your own experience.

        The film was assembled using a process sometimes described as “fatal editing”: the visual and sound samples were placed on the timeline largely at random. Their first arrangement was kept almost unchanged, as though the material had organised itself with minimal intervention from the artist.
        Press SPACE to proceed

        Спасибо за ваше время и интерес.
        Это исследование посвящено восприятию художественного произведения.
        Вам будет предложено посмотреть 30-минутный фильм. Его нельзя будет остановить или перемотать, поэтому убедитесь, что у вас есть достаточно времени без перерыва.
        Перед фильмом вам нужно будет ответить на два коротких вопроса, а после — ещё на несколько.
        Здесь нет правильных или неправильных ответов. Пожалуйста, отвечайте, опираясь на собственное переживание.

        Фильм был собран с помощью процесса, который иногда называют «фатальным монтажом»: визуальные и звуковые фрагменты были размещены на таймлайне случайным образом. Их первая композиция была сохранена почти без изменений — словно материал сам организовал себя при минимальном вмешательстве художника.
        Чтобы продолжить, нажмите ПРОБЕЛ
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_1
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    CodeComponent gate_welcome_1
      Code Type = Both
      Begin JS Routine:
        if (condition !== 1) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 1:
            continueRoutine = False
    TextComponent welcome
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time and interest.
        This study explores how people experience a work of art.
        You will watch a 30-minute film. The film cannot be paused or rewound, so please make sure you have enough uninterrupted time.
        Before the film, you will answer two short questions. After the film, you will answer several more.
        There are no right or wrong answers. Please respond based on your own experience.
        Press SPACE to proceed

        Спасибо за ваше время и интерес.
        Это исследование посвящено восприятию художественного произведения.
        Вам будет предложено посмотреть 30-минутный фильм. Его нельзя будет остановить или перемотать, поэтому убедитесь, что у вас есть достаточно времени без перерыва.
        Перед фильмом вам нужно будет ответить на два коротких вопроса, а после — ещё на несколько.
        Здесь нет правильных или неправильных ответов. Пожалуйста, отвечайте, опираясь на собственное переживание.
        Чтобы продолжить, нажмите ПРОБЕЛ
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_3
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    CodeComponent gate_welcome_3
      Code Type = Both
      Begin JS Routine:
        if (condition !== 3) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 3:
            continueRoutine = False
    TextComponent welcome_6
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time and interest.
        This study explores how people experience a work of art.
        You will watch a 30-minute film. The film cannot be paused or rewound, so please make sure you have enough uninterrupted time.
        Before the film, you will answer two short questions. After the film, you will answer several more.
        There are no right or wrong answers. Please respond based on your own experience.

        The film is based on material recorded in real places and circumstances: the winter forest footage was filmed during a search for a missing person who was later found dead. The soundtrack includes an improvisation with an organist in a Lutheran church, crows in a Bosnian park, birds in Einstein’s Garden in Berlin, and the voices of visitors at an evening of Greek songs.
        Press SPACE to proceed

        Спасибо за ваше время и интерес.
        Это исследование посвящено восприятию художественного произведения.
        Вам будет предложено посмотреть 30-минутный фильм. Его нельзя будет остановить или перемотать, поэтому убедитесь, что у вас есть достаточно времени без перерыва.
        Перед фильмом вам нужно будет ответить на два коротких вопроса, а после — ещё на несколько.
        Здесь нет правильных или неправильных ответов. Пожалуйста, отвечайте, опираясь на собственное переживание.

        Фильм основан на материале, записанном в реальных местах и обстоятельствах: кадры зимнего леса были сняты во время поисков пропавшего человека, которого позже найдут мёртвым. В звуковой ряд вошли импровизация с органистом в лютеранской церкви, вороны в боснийском парке, птицы в берлинском саду Эйнштейна и голоса посетителей вечера греческой песни.
        Чтобы продолжить, нажмите ПРОБЕЛ
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_4
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    CodeComponent gate_welcome_4
      Code Type = Both
      Begin JS Routine:
        if (condition !== 4) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 4:
            continueRoutine = False
    TextComponent welcome_7
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time and interest.
        This study explores how people experience a work of art.
        You will watch a 30-minute film. The film cannot be paused or rewound, so please make sure you have enough uninterrupted time.
        Before the film, you will answer two short questions. After the film, you will answer several more.
        There are no right or wrong answers. Please respond based on your own experience.

        The film is based on material recorded in real places and circumstances: the winter forest footage was filmed during a search for a missing person who was later found dead. The soundtrack includes an improvisation with an organist in a Lutheran church, crows in a Bosnian park, birds in Einstein’s Garden in Berlin, and the voices of visitors at an evening of Greek songs.
        The film was assembled using a process sometimes described as “fatal editing”: the visual and sound samples were placed on the timeline largely at random. Their first arrangement was kept almost unchanged, as though the material had organised itself with minimal intervention from the artist.
        Press SPACE to proceed

        Спасибо за ваше время и интерес.
        Это исследование посвящено восприятию художественного произведения.
        Вам будет предложено посмотреть 30-минутный фильм. Его нельзя будет остановить или перемотать, поэтому убедитесь, что у вас есть достаточно времени без перерыва.
        Перед фильмом вам нужно будет ответить на два коротких вопроса, а после — ещё на несколько.
        Здесь нет правильных или неправильных ответов. Пожалуйста, отвечайте, опираясь на собственное переживание.

        Фильм основан на материале, записанном в реальных местах и обстоятельствах: кадры зимнего леса были сняты во время поисков пропавшего человека, которого позже найдут мёртвым. В звуковой ряд вошли импровизация с органистом в лютеранской церкви, вороны в боснийском парке, птицы в берлинском саду Эйнштейна и голоса посетителей вечера греческой песни.
        Фильм был собран с помощью процесса, который иногда называют «фатальным монтажом»: визуальные и звуковые фрагменты были размещены на таймлайне случайным образом. Их первая композиция была сохранена почти без изменений — словно материал сам организовал себя при минимальном вмешательстве художника.
        Чтобы продолжить, нажмите ПРОБЕЛ
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanx
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    ButtonComponent finish
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    TextComponent thank_text
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for your time and attention.

        Your responses have been saved. If you would like to receive information about the results of the study, you can save the contact details below.

        Спасибо большое за ваше время и внимание.

        Ваши ответы сохранены. Если вы хотите получить информацию о результатах исследования, вы можете сохранить контактные данные ниже.

        maggiproject@gmail.com
  Routine after_all
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    ButtonComponent save
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_2
      Code Type = Auto->JS
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      Each Frame:
        if (
            baseline_time.getRating() is not None
            and baseline_self.getRating() is not None
            and save.isClicked
        ):
            continueRoutine = False
    TextComponent after_title_2
      letterHeight = 0.025
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
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      text:
        To what extent would each statement describe your experience while watching the film?
        Насколько каждое из следующих утверждений описывает ваш опыт во время просмотра фильма?
    TextComponent question_time
      letterHeight = 0.025
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
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      text:
        My sense of time changed while watching the film.
        Во время просмотра фильма моё ощущение времени изменилось.
    SliderComponent baseline_time
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, 0.13)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_self
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        For a moment, my usual sense of myself faded into the background.
        В какой-то момент моё привычное ощущение себя отошло на второй план.
    SliderComponent baseline_self
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine after_alll
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    ButtonComponent save_2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    TextComponent after_title
      letterHeight = 0.025
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
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      text:
        To what extent would each statement describe your experience while watching the film?
        Насколько каждое из следующих утверждений описывает ваш опыт во время просмотра фильма?
    TextComponent question_connectedness
      letterHeight = 0.025
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
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      text:
        I felt connected to something larger than myself.
        Я почувствовал(а) связь с чем-то большим, чем я сам(а).
    SliderComponent baseline_connectedness
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, 0.13)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_accomodation
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        The experience felt larger than I could immediately make sense of.
        Мне казалось, что происходящее больше, чем можно было сразу полностью понять.
    SliderComponent baseline_accomodation
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    CodeComponent validate_before_3
      Code Type = Auto->JS
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      Each Frame:
        if (
            baseline_connectedness.getRating() is not None
            and baseline_accomodation.getRating() is not None
            and save_2.isClicked
        ):
            continueRoutine = False
  Routine after_allll
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    ButtonComponent save_3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_4
      Code Type = Auto->JS
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      Each Frame:
        if (
            baseline_body.getRating() is not None
            and baseline_understanding.getRating() is not None
            and save_3.isClicked
        ):
            continueRoutine = False
    TextComponent after_title_3
      letterHeight = 0.025
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
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      text:
        To what extent would each statement describe your experience while watching the film?
        Насколько каждое из следующих утверждений описывает ваш опыт во время просмотра фильма?
    TextComponent question_body
      letterHeight = 0.025
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
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      text:
        I noticed a physical response while watching (such as goosebumps, changes in breathing, warmth, chills, or muscle tension).
        Во время просмотра я заметил(а) у себя телесную реакцию (например, мурашки, изменение дыхания, ощущение тепла, холода или мышечного напряжения).
    SliderComponent baseline_body
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, 0.13)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent question_understanding
      letterHeight = 0.025
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Watching the film changed the way I understood what I was seeing.
        Во время просмотра изменилось моё понимание того, что я вижу.
    SliderComponent baseline_understanding
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Very much / В большой степени"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine after_1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Allowed keys: space
        Force end of Routine: включено
  Routine open_response
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    ButtonComponent save_4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_5
      Code Type = Auto->JS
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      Each Frame:
        typed_response = open_response_text.text.strip()

        if typed_response != "" and save_4.isClicked:
            continueRoutine = False
    TextComponent open_question
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What, if anything, felt most significant to you while watching the film?
        Было ли что-то, что во время просмотра казалось вам наиболее значимым?
    TextboxComponent open_response_text
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine debrief_group_1
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    TextComponent debrief_title_1
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Additional context / Дополнительный контекст

        The film is based on material recorded in real places and circumstances: the winter forest footage was filmed during a search for a missing person who was later found dead. The soundtrack includes an improvisation with an organist in a Lutheran church, crows in a Bosnian park, birds in Einstein’s Garden in Berlin, and the voices of visitors at an evening of Greek songs.
        The film was assembled using a process sometimes described as “fatal editing”: the visual and sound samples were placed on the timeline largely at random. Their first arrangement was kept almost unchanged, as though the material had organised itself with minimal intervention from the artist.

        To what extent has this additional information changed the way you now perceive the film now?

        Фильм основан на материале, записанном в реальных местах и обстоятельствах: кадры зимнего леса были сняты во время поисков пропавшего человека, которого позже найдут мёртвым. В звуковой ряд вошли импровизация с органистом в лютеранской церкви, вороны в боснийском парке, птицы в берлинском саду Эйнштейна и голоса посетителей вечера греческой песни.
        Фильм был собран с помощью процесса, который иногда называют «фатальным монтажом»: визуальные и звуковые фрагменты были размещены на таймлайне случайным образом. Их первая композиция была сохранена почти без изменений — словно материал сам организовал себя при минимальном вмешательстве художника.

        Насколько эта дополнительная информация изменила то, как вы теперь воспринимаете фильм?
    SliderComponent reappraisal_group_1
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Completely / Полностью изменила"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent save_5
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_6
      Code Type = Auto->JS
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      Each Frame:
        if (
            reappraisal_group_1.getRating() is not None
            and save_5.isClicked
        ):
            continueRoutine = False
    CodeComponent gate_welcome
      Code Type = Both
      Begin JS Routine:
        if (condition !== 1) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 1:
            continueRoutine = False
  Routine debrief_group_2
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    TextComponent debrief_title
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Additional context / Дополнительный контекст

        The film is based on material recorded in real places and circumstances: the winter forest footage was filmed during a search for a missing person who was later found dead. The soundtrack includes an improvisation with an organist in a Lutheran church, crows in a Bosnian park, birds in Einstein’s Garden in Berlin, and the voices of visitors at an evening of Greek songs.

        To what extent has this additional information changed the way you now perceive the film now?

        Фильм основан на материале, записанном в реальных местах и обстоятельствах: кадры зимнего леса были сняты во время поисков пропавшего человека, которого позже найдут мёртвым. В звуковой ряд вошли импровизация с органистом в лютеранской церкви, вороны в боснийском парке, птицы в берлинском саду Эйнштейна и голоса посетителей вечера греческой песни.

        Насколько эта дополнительная информация изменила то, как вы теперь воспринимаете фильм?
    SliderComponent reappraisal_group_2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Completely / Полностью изменила"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent save_6
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_7
      Code Type = Auto->JS
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      Each Frame:
        if (
            reappraisal_group_2.getRating() is not None
            and save_6.isClicked
        ):
            continueRoutine = False
    CodeComponent gate_welcome_5
      Code Type = Both
      Begin JS Routine:
        if (condition !== 2) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 2:
            continueRoutine = False
  Routine debrief_group_3
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    TextComponent debrief_title_2
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Additional context / Дополнительный контекст

        The film was assembled using a process sometimes described as “fatal editing”: the visual and sound samples were placed on the timeline largely at random. Their first arrangement was kept almost unchanged, as though the material had organised itself with minimal intervention from the artist.

        To what extent has this additional information changed the way you now perceive the film now?

        Фильм был собран с помощью процесса, который иногда называют «фатальным монтажом»: визуальные и звуковые фрагменты были размещены на таймлайне случайным образом. Их первая композиция была сохранена почти без изменений — словно материал сам организовал себя при минимальном вмешательстве художника.

        Насколько эта дополнительная информация изменила то, как вы теперь воспринимаете фильм?
    SliderComponent reappraisal_group
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ["Not at all / Совсем нет", "Completely / Полностью изменила"]
      letterHeight = 0.02
      pos = (0, -0.23)
      size = (1.2, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent save_7
      bold = True
      forceEndRoutine = False
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (0.32, 0.1)
      startVal [time (s)] = 0
      text = Save
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    CodeComponent validate_before_8
      Code Type = Auto->JS
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      Each Frame:
        if (
            reappraisal_group.getRating() is not None
            and save_7.isClicked
        ):
            continueRoutine = False
    CodeComponent gate_welcome_6
      Code Type = Both
      Begin JS Routine:
        if (condition !== 3) {
            continueRoutine = false;
        }
      Begin Routine:
        if condition != 3:
            continueRoutine = False
Flow
  Routine assignment
  Routine welcome_1
  Routine welcome_2
  Routine welcome_3
  Routine welcome_4
  Routine before
  Routine video
  Routine after_all
  Routine after_alll
  Routine after_allll
  Routine open_response
  Routine debrief_group_1
  Routine debrief_group_2
  Routine debrief_group_3
  Routine thanx
